# 1 "/opt/topspin3.5pl7/exp/stan/nmr/lists/pp/dept135"
;dept135
;avance-version (14/10/09)
;dept polarization transfer
;with 135 degree read pulse to give XH, XH3 positive and XH2 negative
;with decoupling during acquisition
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p2=p1*2"
"p4=p3*2"
"d2=1s/(cnst2*2)"
"d12=20u"


"DELTA=p1*4/PI"
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"acqt0=-p1*2/PI"


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2 do:f2
LBLF0, MCWRK 
  MCREST
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  d1
  d12 pl2:f2
  (p3 ph1):f2
  d2
  (p4 ph2):f2 (p1 ph4 d2):f1
  (p3*1.5 ph3):f2 (p2 ph5 d2):f1
  DELTA pl12:f2
  go=2 ph31 cpd2:f2
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  MCWRK do:f2 wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit
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ph1=0
ph2=0 2 1 3
ph3=1 1 1 1 3 3 3 3
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph5=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3
ph31=1 1 3 3 3 3 1 1 2 2 0 0 0 0 2 2
     3 3 1 1 1 1 3 3 0 0 2 2 2 2 0 0


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;ns: 4 * n, total number of scans: NS * TD0
;ds: 8
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
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;DELTA: delay to compensate for chemical shift evolution during
;          RF pulse in order to give same phase correction as 
;          for reference 1D spectrum


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;$Id: dept135,v 1.12.2.1 2014/10/10 09:21:10 ber Exp $
